load_file("nrngui.hoc")
//load_file("read.hoc")

objref nclist, r
double count[NCELL]
double rec_connect[NCELL][NSYN]




proc initCount() { local i
    for i=0, cells.count-1 {
	count[i] = 0
    }
}

proc checkgid() {local i, exist
    for i=0, NCELL-1 {
	exist = pc.gid_exists(i)
	if(exist){
	    printf("cell %d exists!!\n",i)
	}
	//printf("%dth result is %d\n",i,exist)
    }
}

proc connectCells() { local i, j, k, targid, num_ecell, num_syn, num_vta, nsyn_max localobj src, target, syn, nc, nil
    num_ecell = $1
    num_syn = $2
    num_vta = $3
    nsyn_max = $4
    nclist = new List()
    r = new Random(25525)
    mem = -1
    //read_mat()
    for i=0, NCELL-1{
	if(pc.gid_exists(i)){
	    for j=0, NCELL-1{
		for(k=0;k<con.x[i][j];k=k+1){
		    syn = pc.gid2cell(i).makeSyn(i,j,NCELL_E,NCELL_VTA)
		    nc = pc.gid_connect(j,syn)
		    printf("my host id = %d, parent(pre) cell id = %d\n",pc.id,j)
		    nclist.append(nc)
		    nc.delay = 0.1
		    if(i<num_ecell){
			nc.weight = 0.5//fortest 0.002
		    }else{
			nc.weight = 0.1
		    }
		}
	    }
	}
    }
}


	    /*
    for i=0, NCELL-1{
	if(pc.gid_exists(i)){
	    for j=0, num_syn-1{
		src = pc.gid2obj(i)
		pc.set_gid2node(1000000+i*num_syn+j, pc.id)
		src.soma nc = new NetCon(&v(0.5),nil,0,0,0.1)
		pc.cell(1000000+i*num_syn+j,nc)
		nclist.append(nc)
		nc.delay = 0.1
		if(i<num_ecell){
		    nc.weight = 0.0002
		}else{
		    nc.weight = 0.1
		}
	    }
	}
    }
    pc.barrier()
    */
    
    
    /*
    //for i=0, cells.count-1 {
    for i=0, NCELL-1{
	//src = cells.object(i)
	for j=0, num_syn-1 {
	    if(i<num_ecell){
		mem=int((i+r.uniform(1,NCELL-1)))%NCELL
	    }else{
		mem = int((r.uniform(0,num_ecell-1)))
	    }
	    targid = mem
	    if(!pc.gid_exists(targid)){
		continue
	    }
	    //kokode targid wo kakunin
	    for k=0, pc.nhost-1{
		if(k==pc.id){
		    printf("%dth process, aite=%d\n",k,targid)
		}
	    }
	    //yappari process nai desika tunagatte nai mitai?????
	    target = pc.gid2cell(targid)
	    /****************************TODO***************************************/
	   // syn = target.makeSyn(targid,NCELL_E,NCELL_VTA)//tabun kokode tukuttahouga raku!!
	    /***********************************************************************/
	    /****************kokokara shitamademo TODO ni ireyou*******************/
	    //if(i>=num_ecell){
	    //	syn.e = -100 //???
	    //printf("inhibit mem = %d, count[mem]=%d\n",mem,int(count[mem]))
	    //  }
	    /*********************************************************************/
/*
	    //nc = pc.gid_connect(1000000+i*num_syn+j,syn)
	    nc = pc.gid_connect(i,syn)
	    nclist.append(nc)
	    nc.delay = 0.1
	    if(i<num_ecell){
		//nc.weight = 1//itiou setuzoku ha dekiteiru moyou
		nc.weight = 0.0002
		//cells.object(i).soma nclist.append(new NetCon(&v(0.5),syn,0,0,0.0002))
	    }else{
		nc.weight = 0.1
		//cells.object(i).soma nclist.append(new NetCon(&v(0.5),syn,0,0,0.1))
	    }
	}
    }
}*/