load_file("nrngui.hoc")

objref resv
//dacounter = 0
objref dacounter, bcaster
id_root = 0

proc signalDA() {local i, j, k, counter, tmpDA, num_vta, num_ecell, nsyn_max, buf
    num_vta = $1
    num_ecell = $2
    nsyn_max = $3
    counter = 0
    resv = new Vector()
    buf=0
    //dacounter=0
    dacounter = new Vector(1)
    bcaster = new Vector(1)
    /*
    for i=0, num_vta-1 {
	if(pc.gid_exists(i)){
	    tmpDA = pc.gid2cell(i).synlist.object(2).forDA
	    break
	}
    }*/
    //tmpDA = cells.object(0).synlist.object(2).forDA
    //printf("\n\n\nmy tmpDA = %lf, my pc.id = %d\n\n\n",tmpDA,pc.id)
    //tmpDA = tmpDA * 0.995
    for i=0, num_vta-1 {
	if(pc.gid_exists(i)){
	    if(pc.gid2cell(i).synlist.object(2).forSpike==1){
		pc.gid2cell(i).synlist.object(2).forSpike = 2
		//tmpDA = tmpDA + 0.04
		dacounter.x(0) = dacounter.x(0) + 1
	    }
	}
    }
    //pc.barrier()
    //pc.allgather(dacounter,resv)
    /*******************TODO********************************/
    {pc.gather_d(dacounter,resv,1,id_root)}
    //{pc.gather_i(dacounter,resv,1,id_root)}//slower than d
    if(pc.id==id_root){
	tmpDA = cells.object(0).synlist.object(2).forDA
	tmpDA = tmpDA * 0.99987469431//0.995
	for(i=0;i<resv.size;i+=1){
	    bcaster.x(0) += resv.x(i)
	}
	tmpDA = tmpDA + 0.04*bcaster.x(0)
	bcaster.x(0) = tmpDA
    }
    pc.broadcast(bcaster,id_root)
    /*******************************************************/
    /*
    for(i=0;i<resv.size;i=i+1){
	if(resv.x[i]!=0){
	    //printf("\n\ntime = %lf\n resv[%d]=%d\n\n",t,i,resv.x[i])
	}
	buf = buf + resv.x[i]
    }
    tmpDA = tmpDA + 0.04*buf*/
    
    //    tmpDA = tmpDA * 0.995 //if following Izhikevich, here should be this discription
    //printf("\n\n\n before change\n\n\n")
    for i=0, NCELL_E-1 {//cells.count-1 {
	if(pc.gid_exists(i)){
	    //for j=0, pc.gid2cell(i).synlist.count-3 {
	    for j=0, num_ecell-1{
		//for(k=0;k<con.x[i][j];k=k+1){
		if(con.x[i][j]){
		    for k=0, 3{
			//pc.gid2cell(i).synlist.object(counter+2).forDA = tmpDA
			//printf("i=%d from j=%d\n",i,j)
			pc.gid2cell(i).synlist.object(counter+2).forDA = bcaster.x(0)
			counter = counter + 1
		    }
		    counter = counter+1
		}
	    }
	}
	counter = 0
	if(pc.gid_exists(i+NCELL_E)){
	    for j=0, num_ecell-1{
		if(con.x[i][j]){
		    for k=0, 3{
			pc.gid2cell(i+NCELL_E).synlist.object(counter+2).forDA = bcaster.x(0)
			counter = counter + 1
		    }
		}
	    }
	}
	counter = 0
    }
    //dacounter=0
    //buf = 0//for avoiding error
}
